firstFile=true;

dir = getDirectory("Choose Source Directory ");
list = getFileList(dir);


//find first sub-folder
for (i=0; i<list.length; i++) 
	{
	if (endsWith(list[i], "/"))	
		{
			//write(list[i]);
		list2 = getFileList(dir+list[i]);
		i=list.length;
		}
	}


setForegroundColor(255, 255, 255);
setFont("SansSerif", 38, "antiliased");
count=0


Dialog.create("Open all FLEX to Montage");

Dialog.addChoice("Well Index", list2)
Dialog.addNumber("Red Max", 2000);
Dialog.addNumber("Green Max",1000);
Dialog.addNumber("Blue Max", 2000);
Dialog.addNumber("Auto scale",1);
Dialog.addNumber("Number of Rows", 3);
Dialog.show();

wellIndex = Dialog.getChoice();
redMax= Dialog.getNumber();
greenMax= Dialog.getNumber();
blueMax =  Dialog.getNumber();
autoScale = Dialog.getNumber();
rows = Dialog.getNumber();
//showMessage(autoScale);
autoTxt="";
if (autoScale==1) autoTxt=" auto_contrast";

//showMessage(autoTxt);

   count = 0;
	count2=0;
   countFiles(dir);
   n = 0;






processFiles(dir);
  
//selectImage(stack);
//setSlice(count2+1);
//run("Delete Slice");



function countFiles(dir) {
      list = getFileList(dir);
      for (i=0; i<list.length; i++) {
          if (endsWith(list[i], "/"))
              countFiles(""+dir+list[i]);
          else
              count++;
      }
  }

  function listFiles(dir)
	{
	flexArray = newArray(
	list = getFileList(dir);
	for (i=0; i<list.length; i++) 
		{
		if (endsWith(list[i], "/"))
		              listFiles(""+dir+list[i]);
		else
			{
          			showProgress(n++, count);
			path = dir+list[i];
			if (list[i]== wellIndex)
				{
				
	   			processFile(path);
				}
          			}
		}
  	}


function processFile(path)	
	{
	count2++;
	
	run("Bio-Formats Windowless Importer", "open=["+path+"]");
	flexID=getImageID();
	run("Opened FLEX to RGB", "red_slice=1 green_slice=3 blue_slice=2 red_Max="+redMax+" green_Max="+greenMax+" blue_Max="+blueMax+autoTxt);
	//write("red=1 green=2 blue=3 red="+redMax+" green="+greenMax+" blue="+blueMax+autoTxt);
		rgbID=getImageID();
		if(floor(nSlices/rows)==round(nSlices/rows))
		{cols = (nSlices/rows);}
	else	{cols = floor(nSlices/rows)+1;}
		run("Make Montage...", "columns="+cols+" rows="+rows+" scale=0.5 first=1 last="+nSlices+" increment=1 border=3 label");
	montageID=getImageID();
	drawString(list[i], getWidth()-300, getHeight()-20);
	
	selectImage(montageID);
	
	run("Select All");
	run("Copy");
	
	selectImage(stack);
	setSlice(count2);
	run("Paste");
	run("Add Slice");
	setSlice(count2);
	setMetadata(list[i]);
	selectImage(montageID);
	close();	
	selectImage(rgbID);
	close();
	selectImage(flexID);
	close();
	
	}
